CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:407
GitHash:
ModuleCount:14
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "C2")
    Name to assign these images:OrigBlue
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C1")
    Name to assign these images:OrigGreen
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['Identify the nuclei from the DAPI image. Three-class thresholding performs better than the default two-class thresholding in this case.']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
    Select the input image:OrigBlue
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):100,500
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0,1
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:Yes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
IdentifySecondaryObjects:[module_num:6|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notes:['Identify the cells by using the nuclei as a “seed” region, then growing outwards until stopped by the image threshold or by a neighbor. The Propagation method is used to delineate the boundary between neighboring cells.']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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:OrigGreen
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.344
    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:Yes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifyTertiaryObjects:[module_num:7|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notes:['Identify the cytoplasm by “subtracting” the nuclei objects from the cell objects.']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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

MaskObjects:[module_num:8|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
    Select objects to be masked:Cells
    Name the masked objects:MaskedNuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Retain
    Invert the mask?:No

MeasureObjectSizeShape:[module_num:9|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notes:['Measure morphological features from the cell, nuclei and cytoplasm objects.']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enabled:False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
    Select object sets to measure:MaskedNuclei
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:10|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notes:['Measure intensity features from nuclei and cell objects against the cropped DAPI image.']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
    Select images to measure:OrigBlue, OrigGreen
    Select objects to measure:Cytoplasm, MaskedNuclei

MeasureTexture:[module_num:11|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notes:['Measure texture features of the nuclei, cells and cytoplasm from the cropped DAPI image.']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enabled:False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
    Select images to measure:OrigGreen
    Select objects to measure:Nuclei, Cells, Cytoplasm
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Both
    Texture scale to measure:3

GrayToColor:[module_num:12|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notes:['Combine the cropped grayscale channels into a color RGB image.']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enabled:False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
    Select a color scheme:RGB
    Rescale intensity:No
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    Select the image to be colored green:OrigGreen
    Select the image to be colored blue:OrigBlue
    Name the output image:RGBImage
    Relative weight for the red image:1
    Relative weight for the green image:1
    Relative weight for the blue image:1
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
SaveImages:[module_num:13|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notes:['Save the color image as an 8-bit TIF, appending the text RBG to the original filename of the DAPI image.']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enabled:False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
    Select the type of image to save:Image
    Select the image to save:RGBImage
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:CroppedFlyImage
    Number of digits:4
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    Saved file format:tiff
    Output file location:Default Output Folder|None
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:14|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notes:['Export any measurements to a comma-delimited file (.csv). The measurements made for the nuclei, cell and cytoplasm objects will be saved to separate .csv files, in addition to the per-image .csv’s.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|Z:\\Aiwei\\Experiments\\Exp 50 RNA microscopy peak trough\\repeat 5 + INK128
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:MaskedNuclei
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Cytoplasm
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
